PsychoPy2experiment version="3.0.0b1"
Settings
  expName = circular_deg_to_pix
  Show info dlg = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Window size (pixels) = [1680, 1050]
  Screen = 1
  Monitor = macbookpro
  Units = pix
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from psychopy.tools.coordinatetools import pol2cart

        theta = 0 # theta is the location on the circle's circumference
        radius = 300 # radius in pixels
        pxloc2 = pol2cart(theta, radius, units='deg')
      Each Frame:
        theta += 1 # this just makes it move
        pxloc2 = pol2cart(theta, radius, units='deg')

        thisLoc = 'x = {:.2f}, y = {:.2f}'.format(pxloc2[0],pxloc2[1])
    PolygonComponent cross
      startVal [time (s)] = 0.0
      size = (20, 20)
      shape = cross
      fillColor = $[1,1,1]
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    PolygonComponent object
      startVal [time (s)] = 0.0
      pos [set every frame] = pxloc2 
      size = (100,100)
      shape = rectangle
      fillColor = $[1,1,1]
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    TextComponent text
      startVal [time (s)] = 0.0
      color = black
      pos = (0, 50)
      text [set every frame] = $thisLoc
      letterHeight = 50
      wrapWidth = 700
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Flow
  Routine trial
